PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = learn_exp
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        introduction and instructions

        (press spacebar to continue)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        consent forms here

        (press space bar to continue)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exposure
    SoundComponent sound_1
      sound [set every repeat] = $word
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions
  Routine consent
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/stim.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'ID': 1, 'word': 'badago_chain', 'Type': 'Exposure', 'Block': 1, 'condition': 'same'},
      {'ID': 2, 'word': 'balabo_chain', 'Type': 'Exposure', 'Block': 1, 'condition': 'same'},
      {'ID': 3, 'word': 'bolelo_chain', 'Type': 'Exposure', 'Block': 1, 'condition': 'same'},
      {'ID': 4, 'word': 'doloze_chain', 'Type': 'Exposure', 'Block': 1, 'condition': 'same'},
      {'ID': None, 'word': None, 'Type': None, 'Block': None, 'condition': None}]
    Routine exposure
  LoopTerminator trials
