PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = learn_exp
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        introduction and instructions

        (press spacebar to continue)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        consent forms here

        (press space bar to continue)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exposure
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        s_file_name = 'stimuli/audio/'+word+'.wav'


        exposure_prompt_file_name = s_file_name
        def play_exposure_prompt_sound():
            exposure_prompt_sound = sound.Sound(value=exposure_prompt_file_name, volume=1.0)
            exposure_prompt_sound.play()
            core.wait(.3)
      Each Frame:
        if exposure_prompt_mouse.isPressedIn(button_play_exposure_prompt, buttons=[0]): # button 0 is the left click
            play_exposure_prompt_sound()
    MouseComponent exposure_prompt_mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ButtonComponent button_play_exposure_prompt
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = play
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  Routine the_end
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        thank you
  Routine initialize_trials
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import numpy as np
        import pandas as pd
        # import items.xlsx, which is a wide form file containing all possible word trials for this experiment
        # note tha within the dataframe, the index of a certain row i is equal to the row number excel gives minus 2
        df_items = pd.read_excel("/Users/sarah/Git/stress_learn/experiment/stimuli/stim.xlsx")
Flow
  Routine instructions
  Routine consent
  Routine initialize_trials
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment/stimuli/stim.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'ID': 1, 'word': 'badago_chain'},
      {'ID': 2, 'word': 'balabo_chain'},
      {'ID': 3, 'word': 'bolelo_chain'},
      {'ID': 4, 'word': 'doloze_chain'}]
    Routine exposure
  LoopTerminator trials
  Routine the_end
